PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = 2022_28_10 14:20
  Screen = 2
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Arm_pattern
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Routines
  Routine Move
    TextComponent Forward
      letterHeight = 0.1
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 2
      text = Cжатие
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    TextComponent Backward
      letterHeight = 0.1
      startVal [time (s)] = $pause + 6
      stopVal [duration (s)] = $backward
      text = Разжатие
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    TextComponent Neut
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = $pause
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      text:
        Нейтральное положение
    MovieComponent Movement
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $video
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine Instruction
    TextComponent Instructions
      languageStyle = RTL
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Экспермент заключается в сборе ЭМГ данных для создание системы
        управления бионического протеза.
        На экране будут отображаться название движений:
        1.Сгибание/разгибание локтя
        2.Сгибание/разгибание запястья
        3.Пронация/супинация кисти
        4.Сжатие/Разжатие в кулак
        5.Сжатие/Разжатие точный схват
        6.Сжатие/Разжатие указательный жест
        7.Перемещение большого пальца из
        бокового положения в центральное и наоборот
        8. Отсутствие движения
        Выполняйте движения: из положения по умолчанию в сокращенное
        и по сигналу в обратном направлении.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent LSL_server
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo('MyMarkerStream', 'Events', 1, 0, 'string', 'id43536');
        outlet = StreamOutlet(info)
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 10
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    conditions:
      [{'stimuli_id': 1, 'movement': 'Локоть'},
      {'stimuli_id': 2, 'movement': 'Запястье'},
      {'stimuli_id': 3, 'movement': 'Кулак'},
      {'stimuli_id': 4, 'movement': 'Точный схват'},
      {'stimuli_id': 5, 'movement': 'Указательный жест'},
      {'stimuli_id': 6, 'movement': 'Вращение запястьем'},
      {'stimuli_id': 7, 'movement': 'Большой палец'}]
    Routine Move
  LoopTerminator trials
